PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = gca
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image
      image = stimuli/social/016_y_m_n_b.jpg
      pos = (-0.5, 0.2)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 5
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 6
      stopVal [duration (s)] = 5
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Flow
  Routine trial
